 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "Method_1_TortoiseGit_Test.res"
dialog customDialog_1;
variable dialogReturn;
variable int_num_plates;
dialog customDialog_2;
variable int_mixing;
variable int_Total_Plates;
dialog customDialog_3;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
dialog customDialog_11;
dialog customDialog_12;
global device ML_STAR ("Method_1_TortoiseGit_Test.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    customDialog_1.InitCustomDialog("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");
    customDialog_1.ShowCustomDialog();
    dialogReturn = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
    int_num_plates = customDialog_1.GetCustomDialogProperty( "numeric1.Value" );
    if (dialogReturn == 2)
    {
      abort;
    }
    TrcTrace(Translate("Total Plates: "), int_Total_Plates);
    if (int_num_plates == 1)
    {
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 2)
    {
      customDialog_3.InitCustomDialog("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");
      customDialog_3.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 3)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 4)
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 5)
    {
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 6)
    {
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 7)
    {
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 8)
    {
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 9)
    {
      customDialog_10.InitCustomDialog("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");
      customDialog_10.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    if (int_num_plates == 10)
    {
      customDialog_11.InitCustomDialog("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");
      customDialog_11.ShowCustomDialog();
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      ML_STAR.Part_Tip_All.SetCurrentPosition(1);
      ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
      ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
      ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    }
    customDialog_12.InitCustomDialog("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");
    customDialog_12.ShowCustomDialog();
  } }
